PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = trial
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Routines
  Routine CAT_2
    TextComponent C
      contrast = 1.5
      letterHeight = 2
      pos = (-9,11)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 53.64
      text [set every repeat] = $text
      units = cm
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    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = ezgif.com-gif-maker (1).mp4
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 53.64
      units = deg
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  Routine Bowl
    TextComponent start_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = start_word_2
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    TextComponent F_2
      contrast = 1.5
      letterHeight = 1.5
      pos = (-16,11)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 4.47
      text = F
      units = cm
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    MovieComponent movie_5
      backend = moviepy
      forceEndRoutine = False
      movie = ezgif.com-gif-maker (1).mp4
      size = (34,20)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 4.47
      units = deg
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    TextComponent I_2
      contrast = 1.5
      letterHeight = 1.5
      pos = (-16,11)
      startVal [time (s)] = 6.47
      stopVal [duration (s)] = 4.47
      units = deg
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      text:
        I
    MovieComponent Movie2_5
      backend = moviepy
      forceEndRoutine = False
      movie = ezgif.com-gif-maker (1).mp4
      size = (34,20)
      startVal [time (s)] = 6.47
      stopVal [duration (s)] = 4.47
      units = cm
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    TextComponent S_2
      contrast = 1.5
      letterHeight = 1.5
      pos = (-16,11)
      startVal [time (s)] = 10.94
      stopVal [duration (s)] = 4.47
      units = cm
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      text:
        S
    MovieComponent movie3_5
      backend = moviepy
      forceEndRoutine = False
      movie = ezgif.com-gif-maker (1).mp4
      size = (34,20)
      startVal [time (s)] = 10.94
      stopVal [duration (s)] = 4.47
      units = cm
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    TextComponent H_2
      contrast = 1.5
      letterHeight = 1.5
      pos = (-16,11)
      startVal [time (s)] = 15.41
      stopVal [duration (s)] = 4.47
      units = cm
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      text:
        H
    MovieComponent movie4_4
      backend = moviepy
      forceEndRoutine = False
      movie = ezgif.com-gif-maker (1).mp4
      size = (34,20)
      startVal [time (s)] = 15.41
      stopVal [duration (s)] = 4.47
      units = cm
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  Routine press
    ButtonComponent button
      bold = True
      callback = C
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Click here when you are ready for next charater
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = tem (3).xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text': 'C'},
      {'text': 'A'},
      {'text': 'T'},
      {'text': 'D'},
      {'text': 'O'},
      {'text': 'G'},
      {'text': 'F'},
      {'text': 'I'},
      {'text': 'S'},
      {'text': 'H'},
      {'text': 'W'},
      {'text': 'A'},
      {'text': 'T'},
      {'text': 'E'},
      {'text': 'R'},
      {'text': 'B'},
      {'text': 'O'},
      {'text': 'W'},
      {'text': 'L'},
      {'text': 'H'},
      {'text': 'A'},
      {'text': 'T'},
      {'text': 'H'},
      {'text': 'A'},
      {'text': 'T'},
      {'text': 'G'},
      {'text': 'L'},
      {'text': 'O'},
      {'text': 'V'},
      {'text': 'E'},
      {'text': 'S'},
      {'text': 'H'},
      {'text': 'O'},
      {'text': 'E'},
      {'text': 'S'},
      {'text': 'F'},
      {'text': 'I'},
      {'text': 'S'},
      {'text': 'H'},
      {'text': 'R'},
      {'text': 'A'},
      {'text': 'T'}]
    Routine CAT_2
    Routine press
  LoopTerminator trials
